CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Settings converted from legacy pipeline.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "AcqData")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>[A-P]) - (?P<Column>[0-9]{1,2}).* (?P<Field>[0-9]{1,2})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does containregexp "D360_40X - HQ460_40M")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Settings converted from legacy pipeline.', 'WARNING: the metadata matching for this pipeline may not have been converted correctly.', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Dapi")
    Name to assign these images:Dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "FAM")
    Name to assign these images:SLX4
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "TR")
    Name to assign these images:TRF2
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:flagTIN2
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Settings converted from legacy pipeline.', 'WARNING: original pipeline used metadata grouping which was not converted during processing of current pipeline.']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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:Dapi
    Name the output image:FilteredImage
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei. Since the nuclei with cells touching the image edge will be filtered out in the netx module.']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
    Select the input image:FilteredImage
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):100,380
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
Threshold:[module_num:7|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enabled:False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
    Select the input image:SLX4
    Name the output image:SLX4ThreshPuncta
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.05
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
EnhanceOrSuppressFeatures:[module_num:8|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enabled:False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
    Select the input image:SLX4ThreshPuncta
    Name the output image:SLX4_puncta_enhanced
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:9|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notes:['']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enabled:False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
    Select the input image:SLX4ThreshPuncta
    Name the primary objects to be identified:SLX4_puncta_segmented
    Typical diameter of objects, in pixel units (Min,Max):3,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
RelateObjects:[module_num:10|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enabled:False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
    Parent objects:Nucleus
    Child objects:SLX4_puncta_segmented
    Name the output object:None
    Calculate child-parent distances?:No
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
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
Threshold:[module_num:11|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
    Select the input image:TRF2
    Name the output image:TRF2ThreshPuncta
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:2.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
EnhanceOrSuppressFeatures:[module_num:12|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enabled:False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
    Select the input image:TRF2ThreshPuncta
    Name the output image:TRF2_puncta_enhanced
    Select the operation:Enhance
    Feature size:13
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:TRF2ThreshPuncta
    Name the primary objects to be identified:TRF2_puncta_segmented
    Typical diameter of objects, in pixel units (Min,Max):3,13
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:0.1
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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
RelateObjects:[module_num:14|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
    Parent objects:Nucleus
    Child objects:TRF2_puncta_segmented
    Name the output object:None
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
Threshold:[module_num:15|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enabled:False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
    Select the input image:flagTIN2
    Name the output image:flagThreshPuncta
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.07
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
EnhanceOrSuppressFeatures:[module_num:16|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enabled:False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
    Select the input image:flagThreshPuncta
    Name the output image:flag_puncta_enhanced
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:17|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enabled:False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
    Select the input image:flagThreshPuncta
    Name the primary objects to be identified:flag_puncta_segmented
    Typical diameter of objects, in pixel units (Min,Max):3,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
RelateObjects:[module_num:18|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enabled:False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
    Parent objects:Nucleus
    Child objects:flag_puncta_segmented
    Name the output object:None
    Calculate child-parent distances?:No
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
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
MeasureObjectIntensity:[module_num:19|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enabled:False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
    Hidden:3
    Select an image to measure:SLX4_puncta_enhanced
    Select an image to measure:TRF2_puncta_enhanced
    Select an image to measure:flag_puncta_enhanced
    Select objects to measure:SLX4_puncta_segmented
    Select objects to measure:TRF2_puncta_segmented
    Select objects to measure:flag_puncta_segmented

MeasureColocalization:[module_num:20|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enabled:False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
    Hidden:3
    Hidden:3
    Select an image to measure:SLX4ThreshPuncta
    Select an image to measure:TRF2ThreshPuncta
    Select an image to measure:flagThreshPuncta
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:SLX4_puncta_segmented
    Select an object to measure:TRF2_puncta_segmented
    Select an object to measure:flag_puncta_segmented
    Run all metrics?:Yes
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
MeasureColocalization:[module_num:21|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enabled:False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
    Hidden:2
    Hidden:2
    Select an image to measure:SLX4ThreshPuncta
    Select an image to measure:flagThreshPuncta
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:SLX4_puncta_segmented
    Select an object to measure:flag_puncta_segmented
    Run all metrics?:Yes
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
MeasureColocalization:[module_num:22|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enabled:False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
    Hidden:2
    Hidden:2
    Select an image to measure:TRF2ThreshPuncta
    Select an image to measure:flagThreshPuncta
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:TRF2_puncta_segmented
    Select an object to measure:flag_puncta_segmented
    Run all metrics?:Yes
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
DisplayDataOnImage:[module_num:23|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Nucleus
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Dapi
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:24|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:puncta
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/txccc_s/Bertuch Lab Access/Lois/In progress/IF/optimize pipeline
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2019_1211_Lois_rep3all_trf2thresh2.8
    Overwrite existing files without warning?:No
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