CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "L5")
    Name to assign these images:RNA_KOR
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DAPI
    Conversion method:Combine
    Image type:RGB
    Name the output image:DAPI_gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:RNA_KOR
    Conversion method:Combine
    Image type:RGB
    Name the output image:RNA_gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DAPI_gray
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI_gray
    Number of pixels by which to expand the primary objects:30
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:RNA_gray
    Name the primary objects to be identified:RNA_dots
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.035
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
RelateObjects:[module_num:10|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
    Parent objects:Cells
    Child objects:RNA_dots
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI_gray
    Name the output image:combine_grayOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cells
    Select outline color:Green
    Select objects to display:Nuclei
    Select outline color:Blue
    Select objects to display:RNA_dots

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:combine_grayOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:RNA_KOR
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Elsewhere...|U:\\AU stereology\\Images\\RNAscope\\OLZ,01 - RNAscope\\Acute study\\DAPI + RNA_OPRK1\\Results\\Brain 03
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|U:\\AU stereology\\Images\\RNAscope\\OLZ,01 - RNAscope\\Acute study\\DAPI + RNA_OPRK1\\Results\\Brain 03
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_DAPI,Image|FileName_RNA,Cells|Children_RNA_dots_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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