CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'Here you can start to separate files if you name them properly in a set fashion']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'Make Sure to Update!']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Test
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:Test
    Name the output image:Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Mouse
    Apply which cycle's cropping pattern?:Every
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    Remove empty rows and columns?:All
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Illuminate cells/remove background from cropped image']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
    Select the input image:Crop
    Name the output image:Illum_calculate
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:6
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['Illuminate cells/remove background from cropped image with the illmination calculate module.']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
    Select the input image:Illum_calculate
    Name the output image:Illum_full
    Select the illumination function:Crop
    Select how the illumination function is applied:Subtract

EnhanceOrSuppressFeatures:[module_num:8|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notes:['Enhance DISPERSIVE Cells and Repress Background']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
    Select the input image:Illum_full
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:30
    Feature type:Dark holes
    Range of hole sizes:2,10
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Identify the dispersive cells and count as an object']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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Identify_dispersed
    Typical diameter of objects, in pixel units (Min,Max):2,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:5000
    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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
SplitOrMergeObjects:[module_num:10|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
    Select the input objects:Identify_dispersed
    Name the new objects:neighbors
    Operation:Merge
    Maximum distance within which to merge objects:40
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureImageAreaOccupied:[module_num:11|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Identify_dispersed
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:neighbors
    Select objects to measure:Identify_dispersed
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|BME_400
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|AreaOccupied_Perimeter_Identify_dispersed,Image|AreaOccupied_AreaOccupied_Identify_dispersed,Image|AreaOccupied_TotalArea_Identify_dispersed,Image|FileName_Test
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:test.csv
    Use the object name for the file name?:No
