CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (file does contain "D.TIF")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "F.TIF")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "R.TIF")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Crop the DAPI image down to a 200 x 200 rectangle by entering specific coordinates.']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
    Select the input image:OrigBlue
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:501,700
    Top and bottom rectangle positions:251,450
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    Remove empty rows and columns?:Edges
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
ApplyThreshold:[module_num:6|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
    Select the input image:CropBlue
    Name the output image:BinaryBlue
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:BinaryBlue
    Name the primary objects to be identified:ObjectsFormBinary
    Typical diameter of objects, in pixel units (Min,Max):10,40000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Binary image
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    Select binary image:BinaryBlue
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