CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:45
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "MAP2")
    Name to assign these images:Map2
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Homer")
    Name to assign these images:Homer
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "SYT1")
    Name to assign these images:SYT1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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notes:['Image must be grey scale']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
    Select the input image:Map2
    Name the output image:Map2Tub
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:3.5
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    Enhancement method:Tubeness
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Diameter 1-200', 'threshold upper and lower based on pixel intensity']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
    Select the input image:Map2Tub
    Name the primary objects to be identified:DenTubenessObj
    Typical diameter of objects, in pixel units (Min,Max):1,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:2.0
    Lower and upper bounds on threshold:0.09,1.0
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    Lower outlier fraction:0.02
    Upper outlier fraction:0.02
    Averaging method:Mode
    Variance method:Standard deviation
    # of deviations:0
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
MeasureImageIntensity:[module_num:7|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notes:['Since input is binary (a skeleton), the total intensity measured here is equivalent to the total area (ie. length of skeleton)']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
    Select the image to measure:Map2Tub
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:SYT1
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:Homer
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:Map2Tub
    Select objects to measure:DenTubenessObj

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:DenTubenessObj
    Calculate the Zernike features?:Yes

FlagImage:[module_num:10|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notes:['Skip images with dendrite length <500 pixels']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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:LowDendriteLength
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Intensity_TotalIntensity_Map2Tub
    Flag images based on low values?:Yes
    Minimum value:500
    Flag images based on high values?:No
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
EnhanceOrSuppressFeatures:[module_num:11|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notes:['Feature size = size of the largest synapse you want to measure (basically background subtraction)']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
    Select the input image:SYT1
    Name the output image:SYT1Enhance
    Select the operation:Enhance
    Feature size:6
    Feature type:Speckles
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    Speed and accuracy:Fast

Threshold:[module_num:12|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
    Select the input image:SYT1Enhance
    Name the output image:SYT1Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.8
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.1,0.8
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Morph:[module_num:13|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notes:['maybe delete shrink']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
    Select the input image:SYT1Threshold
    Name the output image:SYT1morph
    Select the operation to perform:clean
    Number of times to repeat operation:Once
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
EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:Homer
    Name the output image:HomerEnhance
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast

Threshold:[module_num:15|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
    Select the input image:HomerEnhance
    Name the output image:HomerThreshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.8
    Threshold correction factor:2.0
    Lower and upper bounds on threshold:0.1,0.8
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Morph:[module_num:16|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notes:['']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
    Select the input image:HomerThreshold
    Name the output image:HomerMorph
    Select the operation to perform:clean
    Number of times to repeat operation:Once
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:SYT1morph
    Name the primary objects to be identified:SYT1Identify
    Typical diameter of objects, in pixel units (Min,Max):6,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:8.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
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
ConvertObjectsToImage:[module_num:18|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
    Select the input objects:SYT1Identify
    Name the output image:SYT1IdentifyImage
    Select the color format:Binary (black & white)
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
OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:SYT1
    Name the output image:SYT1overlayPrimaryObjects
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:SYT1Identify

IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:HomerMorph
    Name the primary objects to be identified:HomerIdentify
    Typical diameter of objects, in pixel units (Min,Max):6,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:8.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
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
ConvertObjectsToImage:[module_num:21|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
    Select the input objects:HomerIdentify
    Name the output image:Homer1IdentifyImage
    Select the color format:Binary (black & white)
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Homer
    Name the output image:HomerOverlayPrimaryObjects
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:HomerIdentify

MeasureObjectIntensity:[module_num:23|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
    Hidden:1
    Select an image to measure:SYT1morph
    Select objects to measure:SYT1Identify

DisplayHistogram:[module_num:24|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
    Select the object whose measurements will be displayed:SYT1Identify
    Select the object measurement to plot:Intensity_IntegratedIntensity_SYT1morph
    Number of bins:100
    Transform the data prior to plotting along the X-axis?:no
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

MeasureObjectIntensity:[module_num:25|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
    Hidden:1
    Select an image to measure:HomerMorph
    Select objects to measure:HomerIdentify

DisplayHistogram:[module_num:26|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
    Select the object whose measurements will be displayed:HomerIdentify
    Select the object measurement to plot:Intensity_IntegratedIntensity_HomerMorph
    Number of bins:100
    Transform the data prior to plotting along the X-axis?:no
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

FilterObjects:[module_num:27|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notes:['max based on integrated intensity histogram ', 'bright synapses >3']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
    Select the objects to filter:SYT1Identify
    Name the output objects:BrightSYT1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_IntegratedIntensity_SYT1morph
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:28|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notes:['max based on integrated intensity histogram ', 'bright synapses >3']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
    Select the objects to filter:HomerIdentify
    Name the output objects:BrightHomer
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_IntegratedIntensity_HomerMorph
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:29|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
    Select objects to be masked:BrightSYT1
    Name the masked objects:OverlapSYT1Homer
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BrightHomer
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureColocalization:[module_num:30|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
    Hidden:2
    Hidden:1
    Select an image to measure:SYT1Threshold
    Select an image to measure:HomerThreshold
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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
MaskObjects:[module_num:31|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
    Select objects to be masked:BrightHomer
    Name the masked objects:OverlapHomerSYT1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BrightSYT1
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureColocalization:[module_num:32|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
    Hidden:2
    Hidden:1
    Select an image to measure:HomerThreshold
    Select an image to measure:SYT1Threshold
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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
MeasureObjectSizeShape:[module_num:33|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
    Select objects to measure:BrightHomer
    Select objects to measure:BrightSYT1
    Select objects to measure:OverlapHomerSYT1
    Select objects to measure:OverlapSYT1Homer
    Calculate the Zernike features?:No

RelateObjects:[module_num:34|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
    Parent objects:DenTubenessObj
    Child objects:SYT1Identify
    Name the output object:SYT1MAP2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:35|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Map2Tub
    Name the output image:HomeroutlineMAP2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:HomerIdentify

RelateObjects:[module_num:36|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notes:['']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
    Parent objects:DenTubenessObj
    Child objects:HomerIdentify
    Name the output object:Homer1Map2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:37|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
    Parent objects:SYT1Identify
    Child objects:Homer1Map2
    Name the output object:HomerSYT1MAP2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MaskObjects:[module_num:38|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
    Select objects to be masked:Homer1Map2
    Name the masked objects:homermaskedsyt1map2
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:SYT1IdentifyImage
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:39|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
    Select the input objects:homermaskedsyt1map2
    Name the output image:HomerSYT1MAP2grey
    Select the color format:Binary (black & white)
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
IdentifyPrimaryObjects:[module_num:40|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
    Select the input image:HomerSYT1MAP2grey
    Name the primary objects to be identified:Synapses
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
OverlayOutlines:[module_num:41|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notes:['Homeroutline on MAP2 with SYT1 outline']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:HomeroutlineMAP2
    Name the output image:SynapsesMAP2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FEFE0A
    Select objects to display:SYT1Identify

CalculateMath:[module_num:42|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
    Name the output measurement:SynapseMeasurement
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_Synapses
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:43|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
    Name the output measurement:SYT1Measurement
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:SYT1Identify
    Select the numerator measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:44|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
    Name the output measurement:Homer1Measurement
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:HomerIdentify
    Select the numerator measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:45|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|CellProfiler Output Folder/TBI vs. Control
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Control_
    Overwrite existing files without warning?:No
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