CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<PigletID>.*)_(?P<Region>.*)_ (?P<Site>[0-9])_(?P<Date>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:PigDCX
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:2
    Select the input color image:PigDCX
    Name the output image:DCX
    Stain:Fast blue
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    Name the output image:Background
    Stain:Hematoxylin
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
IdentifyObjectsManually:[module_num:6|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
    Select the input image:DCX
    Name the objects to be identified:mask

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:DCX
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:10
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Neurons
    Typical diameter of objects, in pixel units (Min,Max):8,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MaskObjects:[module_num:9|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
    Select objects to be masked:Neurons
    Name the masked objects:MaskedNeurons
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:mask
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:MaskedNeurons
    Select objects to measure:mask
    Calculate the Zernike features?:No

MeasureImageAreaOccupied:[module_num:11|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:mask
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
CalculateMath:[module_num:12|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enabled:False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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Select the first operand measurement:AreaOccupied_TotalArea_mask
    Multiply the above operand by:0.156025
    Raise the power of above operand by:1
    Select the second operand measurement type:Object
    Select the second operand objects:MaskedNeurons
    Select the second operand measurement:AreaShape_Area
    Multiply the above operand by:0.156025
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\Research 19 Fall\\IHC\\Output from CP
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_mask,Image|Count_Neurons,Image|Count_MaskedNeurons,Image|AreaOccupied_Perimeter_mask,Image|AreaOccupied_AreaOccupied_mask,Image|AreaOccupied_TotalArea_mask,Image|Group_Index,Image|Group_Number,Image|Frame_PigNeuN,Image|MD5Digest_PigNeuN,Image|FileName_PigNeuN,Image|PathName_PigNeuN,Image|ModuleError_09MeasureObjectSizeShape,Image|ModuleError_01Images,Image|ModuleError_04Groups,Image|ModuleError_08MaskObjects,Image|ModuleError_02Metadata,Image|ModuleError_03NamesAndTypes,Image|ModuleError_05UnmixColors,Image|ModuleError_06IdentifyObjectsManually,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:NeuN
    Select method for constructing file names:From image filename
    Select image name for file prefix:PigNeuN
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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