CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:OrigColor
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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notes:['Just a guess at Hematoxylin.']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
    Stain count:2
    Select the input color image:OrigColor
    Name the output name:Blue
    Stain:Alican blue
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    Name the output name:Red
    Stain:Eosin
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Blue
    Name the primary objects to be identified:BlueObjs
    Typical diameter of objects, in pixel units (Min,Max):10,400
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureImageAreaOccupied:[module_num:7|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:BlueObjs
    Retain a binary image of the object regions?:No
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
CalculateMath:[module_num:8|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
    Name the output measurement:PercentageAreaCovered
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_BlueObjs
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_TotalArea_BlueObjs
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:No
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