CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1.tif")
    Name to assign these images:PH3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2.tif")
    Name to assign these images:cellbody
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:cellbody
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:7|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
    Select objects to be masked:Cells
    Name the masked objects:MaskedNucleicells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

SaveCroppedObjects:[module_num:8|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
    Objects:MaskedNucleicells
    Directory:Default Output Folder sub-folder|lakshmi_work/Image_analysis_course/CCAMP_workshop/Sample_images/Cellprofiler/ExampleHuman/output_forum
    Saved file format:tiff
    Do you want to save cropped images or object masks?:Masks
    Image:Cellmask

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:DNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:PH3
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|lakshmi_work/Image_analysis_course/CCAMP_workshop/Sample_images/Cellprofiler/ExampleHuman/output_forum
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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