CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1.tif")
    Name to assign these images:PH3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2.tif")
    Name to assign these images:cellbody
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:PH3
    Name the primary objects to be identified:PH3
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
RelateObjects:[module_num:7|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
    Parent objects:PH3
    Child objects:Nuclei
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
SplitOrMergeObjects:[module_num:8|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
    Select the input objects:PH3
    Name the new objects:RelabeledNuclei
    Operation:Split
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:cellbody
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MaskObjects:[module_num:11|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
    Select objects to be masked:Cells
    Name the masked objects:masksplit
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PH3
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:12|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
    Hidden:2
    Select an image to measure:DNA
    Select an image to measure:PH3
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#0080FF
    Select objects to display:Cells
    Select outline color:blue
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:PH3

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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