CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*?)_(?P<Time>)_(?P<FOV>)_(?P<Location>)_(?P<ImageNum>)_c(?P<ChannelNumber>[0-3])\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c1")
    Name to assign these images:myosin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.008,1.0
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:8|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
    Hidden:2
    Select an image to measure:actin
    Select an image to measure:myosin
    Select objects to measure:Cytoplasm

MeasureColocalization:[module_num:9|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
    Hidden:2
    Hidden:1
    Select an image to measure:actin
    Select an image to measure:myosin
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Cells
    Run all metrics?:Yes
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
CalculateMath:[module_num:10|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
    Name the output measurement:Measurement
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_actin
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Intensity_MeanIntensity_myosin
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
GrayToColor:[module_num:11|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
    Select a color scheme:RGB
    Select the image to be colored red:myosin
    Select the image to be colored green:actin
    Select the image to be colored blue:DNA
    Name the output image:Merged_image
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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