CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:_(?P<Pig>[0-9]{1,4})_(?P<stain>[A-Za-z]{1,7})_row(?P<rowtile>[0-9]{1,3})_col(?P<coltile>[0-9]{1,3}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, you’ll need to specify the image type as ‘Color image’ and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Hoechst")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PCNA")
    Name to assign these images:PCNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Similarly, correlation measurements for individual objects can also be obtained. However, to determine colocalization on per-object basis, the objects within the image must be identified.  We first segment the image features into objects, then make comparisons between the individual objects in the channels.', '', 'The input image is selected as Stain1, with the output objects named Objects1. The typical diameter is set as [3,15] for the min/max size we expect the objects to be. We chose to discard small and large objects, which tend to be spurious, and discard those objects at the border because we will be making area-based measurements.', '', 'The chosen thresholding method can greatly affect segmentation.  Here, you want to select a method that will accurately identify the protein of interest as foreground.  Depending on the background level and properties of the stain, you may need to try several different methods and corresponding settings to obtain good segmentation.  Please see the help for IdentifyPrimaryObjects for more information on the thresholding methods available.', '', 'Settings to distinguish clumped objects are of importance for per-object measures of co-localization.  For example, if you wish to measure co-localization only in the nuclei or cytoplasm, each sub cellular compartment must be properly segmented to provide an accurate measurement.  You may need to adjust various settings to get good segmentation of clumpy nuclei. ']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:PCNA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectIntensity:[module_num:7|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
    Hidden:2
    Select an image to measure:Hoechst
    Select an image to measure:PCNA
    Select objects to measure:Nuclei
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Cells
    Name the output image:Cells
    Select the color format:uint16
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:Single name
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    Enter single file name:Nucleilabel_\g<rowtile>_\g<coltile>_\g<Pig>
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    Saved file format:tiff
    Output file location:Default Output Folder|Desktop\\Colon day 1
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:Cells
    Select method for constructing file names:Single name
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    Enter single file name:Celllabel_\g<rowtile>_\g<coltile>_\g<Pig>
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    Saved file format:tiff
    Output file location:Default Output Folder|Desktop\\Colon day 1
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image_\g<Pig>.cptoc
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei_\g<Pig>.cpout
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells_\g<Pig>.cpout
    Use the object name for the file name?:No
