CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'Here you can start to separate files if you name them properly in a set fashion']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'Make Sure to Update!']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Test
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Crop part of image you want to count, also helps remove the background, this can also use a binary mask if we taek pictures in same spot every time']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
    Select the input image:Test
    Name the output image:Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Mouse
    Apply which cycle's cropping pattern?:Every
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    Remove empty rows and columns?:All
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Illuminate cells/remove background from cropped image']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
    Select the input image:Crop
    Name the output image:Illum_calculate
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:6
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['Illuminate cells/remove background from cropped image with the illmination calculate module.']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
    Select the input image:Illum_calculate
    Name the output image:Illum_full
    Select the illumination function:Crop
    Select how the illumination function is applied:Subtract

EnhanceOrSuppressFeatures:[module_num:8|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notes:['Enhance DISPERSIVE Cells and Repress Background']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
    Select the input image:Illum_full
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:30
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify the dispersive cells and count as an object']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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Identify_dispersed
    Typical diameter of objects, in pixel units (Min,Max):10,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
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
ExportToSpreadsheet:[module_num:10|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notes:['Rename imges to counted_dispersive and export the dispersive cell count to counted_test']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Counted_test
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Identify_dispersed|Number_Object_Number,Identify_dispersed|AreaShape_Perimeter,Identify_dispersed|AreaShape_FormFactor,Identify_dispersed|AreaShape_Solidity,Identify_dispersed|AreaShape_Orientation,Identify_dispersed|AreaShape_MaxFeretDiameter,Identify_dispersed|AreaShape_MinFeretDiameter,Identify_dispersed|AreaShape_Area,Identify_dispersed|AreaShape_MeanRadius,Identify_dispersed|AreaShape_EulerNumber,Identify_dispersed|AreaShape_MedianRadius,Identify_dispersed|AreaShape_Compactness,Identify_dispersed|AreaShape_Extent,Identify_dispersed|AreaShape_Eccentricity,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Counted_dispersive
    Overwrite existing files without warning?:No
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
Threshold:[module_num:11|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notes:['This is usually used in very first image processing, can be effective but very prone to background noise and distorts images']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
    Select the input image:Illum_full
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.1
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
EnhanceOrSuppressFeatures:[module_num:12|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notes:['Enhance Hyphal Cells and Repress Background']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
    Select the input image:Illum_full
    Name the output image:Hyphal
    Select the operation:Enhance
    Feature size:25
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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
IdentifyPrimaryObjects:[module_num:13|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notes:['Identify the hyphal cells and count as an object']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
    Select the input image:Hyphal
    Name the primary objects to be identified:identify_hyphal
    Typical diameter of objects, in pixel units (Min,Max):60,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
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
ExportToSpreadsheet:[module_num:14|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notes:['Rename imges to counted_hypahl and export the dispersive cell count to counted_test']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Counted_test
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:identify_hyphal|Number_Object_Number,identify_hyphal|Location_Center_Y,identify_hyphal|Location_Center_X,identify_hyphal|Location_Center_Z
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Counted_hyphal
    Overwrite existing files without warning?:No
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
Threshold:[module_num:15|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notes:['This is usually used in very first image processing, can be effective but very prone to background noise and distorts images']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
    Select the input image:Illum_full
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.1
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Smooth:[module_num:16|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notes:['This appers to make image processing better but didnt work in identifying objects']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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:Smooth
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:Yes
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    Edge intensity difference:0.1
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
MeasureObjectSizeShape:[module_num:17|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notes:['This is good tool for determining max/min of objects size in indentify primary objects']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
    Select objects to measure:Identify_dispersed
    Calculate the Zernike features?:No

SplitOrMergeObjects:[module_num:18|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notes:['This could be a good way to count the amount of groups/biofilm colonies that are forming']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
    Select the input objects:Identify_dispersed
    Name the new objects:merged_dispersed
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectNeighbors:[module_num:19|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notes:['still looking']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
    Select objects to measure:Identify_dispersed
    Select neighboring objects to measure:Identify_dispersed
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
CalculateMath:[module_num:20|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notes:['Easy way to manipulate data']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enabled:False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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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