CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:10997

LoadImages:[module_num:1|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notes:["Load the images by matching files in all folders against the text pattern 'GFPHistone'. Use regular expressions to match and name metadata in the file and path names. Group the analysis by 'Run' so that each folder is analyzed separately. "]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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):Ecad
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Origimage
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    Rescale intensities?:Yes

CorrectIlluminationCalculate:[module_num:2|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
    Select the input image:Origimage
    Name the output image:maskcalc
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationApply:[module_num:3|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
    Select the input image:Origimage
    Name the output image:illumoutline
    Select the illumination function:maskcalc
    Select how the illumination function is applied:Subtract

EnhanceOrSuppressFeatures:[module_num:4|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
    Select the input image:illumoutline
    Name the output image:Enhanced_image
    Select the operation:Enhance
    Feature size:15
    Feature type:Neurites
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
Smooth:[module_num:5|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
    Select the input image:Enhanced_image
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:15
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Invertedimage
    Image or measurement?:Image
    Select the first image:FilteredImage
    Multiply the first image by:1
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the fly embryos from the histone stain image. Three-class thresholding works better than the default two-class method.']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
    Select the input image:Invertedimage
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):50,175
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:MoG Global
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
    Approximate fraction of image covered by objects?:0.9
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:25
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:celledges
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
SaveImages:[module_num:8|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
    Select the type of image to save:Objects
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    Select the objects to save:Cells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Origimage
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:objects
    Select file format to use:mat
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

TrackObjects:[module_num:9|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
    Choose a tracking method:Overlap
    Select the objects to track:Cells
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    Maximum pixel distance to consider matches:20
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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