CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160302210837
GitHash:1b13225
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
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    Select the rule criteria:and (file does contain ".png")
    Name to assign these images:Raw
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Single image location:file:///C:/Users/bcimini/Downloads/MyMask.tif   
    Name to assign this image:mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Raw
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:Red: 1
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    Image name:Channel1
    Channel number:Green: 2
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    Image name:Channel2
    Channel number:Blue: 3
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    Image name:Channel3

MaskImage:[module_num:6|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
    Select the input image:Channel1
    Name the output image:MaskRed
    Use objects or an image as a mask?:Image
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    Select image for mask:mask
    Invert the mask?:Yes

MaskImage:[module_num:7|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
    Select the input image:Channel2
    Name the output image:MaskGreen
    Use objects or an image as a mask?:Image
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    Select image for mask:mask
    Invert the mask?:Yes

MaskImage:[module_num:8|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
    Select the input image:Channel3
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Image
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    Select image for mask:mask
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:9|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notes:['yh']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
    Select the input image:MaskGreen
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Entropy
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