CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ClassI>.*)_(?P<Date>.*)_pG4_(?P<Expt>.*) - R(?P<Row>.*)-C(?P<Column>.*)-F(?P<Field>[0-9]).*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'g4': u'Row', u'MASK': u'Row'}, {u'g4': u'Column', u'MASK': u'Column'}, {u'g4': u'Field', u'MASK': u'Field'}, {u'g4': u'T', u'MASK': u'T'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "MASK") (metadata does C "0") (image does isstackframe)
    Name to assign these images:g4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "MASK") (image does isstackframe)
    Name to assign these images:MASK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:T

ConvertImageToObjects:[module_num:5|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
    Select the input image:MASK
    Name the output object:G4Cells
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

TrackObjects:[module_num:6|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enabled:False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
    Choose a tracking method:Overlap
    Select the objects to track:G4Cells
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    Maximum pixel distance to consider matches:3
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:5
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:g4
    Select objects to measure:G4Cells

MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:G4Cells
    Calculate the Zernike features?:Yes

MeasureImageAreaOccupied:[module_num:9|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:G4Cells
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
ExportToDatabase:[module_num:10|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Elsewhere...|D:\\pHluorin_Static_Timecourses\\Processed\\xdtest_p2
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:KDTesting.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:KDTEST_PHluorin_TC
    Which objects should be used for locations?:G4Cells
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:G4Cells
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\pHluorin_Static_Timecourses\\Processed\\xdtest_p2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,Experiment|Modification_Timestamp,Experiment|Metadata_GroupingTags,Image|Count_G4Cells,Image|AreaOccupied_AreaOccupied_G4Cells,Image|AreaOccupied_TotalArea_G4Cells,Image|Frame_g4,Image|Frame_MASK,Image|FileName_g4,Image|Metadata_Field,Image|Metadata_Plate,Image|Metadata_Well,Image|Metadata_T,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Row,G4Cells|Intensity_MedianIntensity_g4,G4Cells|AreaShape_Area,G4Cells|AreaShape_Compactness,G4Cells|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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