CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-H][0-9]{1,2})_(?P<Time>[0-9]{2})_(?P<ChannelIn>[0-9])_(?P<Site>[0-9]{1,3})_(?P<ChannelOut>.*)_(?P<Plate>[0-9]{3})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:_(?P<PlateID>[0-9])
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\V](?P<PlateID>[0-9])
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelOut "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelOut "GFP")
    Name to assign these images:GFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:PlateID

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.5
    Threshold correction factor:3
    Lower and upper bounds on threshold:0.0025,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Median absolute deviation
    # of deviations:1
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
GrayToColor:[module_num:7|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
    Select a color scheme:RGB
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    Select the image to be colored green:GFP
    Select the image to be colored blue:DAPI
    Name the output image:MGL_ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:0.8
    Relative weight for the blue image:1.0
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
RescaleIntensity:[module_num:8|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
    Select the input image:MGL_ColorImage
    Name the output image:RescaleIntensity
    Rescaling method:Divide by the image's maximum
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:MGLOutlineImage
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:yellow
    Select objects to display:FilteredNuclei
    Select outline color:red
    Select objects to display:Cells

DisplayDataOnImage:[module_num:10|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
    Display object or image measurements?:Object
    Select the input objects:FilteredNuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:MGLOutlineImage
    Text color:white
    Name the output image that has the measurements displayed:MSCDisplayImage
    Font size (points):5
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:Cells
    Select objects to measure:FilteredNuclei
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|C:\\Kanupriya\\Cell
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilteredNuclei|Parent_Nuclei,FilteredNuclei|Number_Object_Number,FilteredNuclei|Location_Center_Y,FilteredNuclei|Location_Center_X,FilteredNuclei|Location_Center_Z,FilteredNuclei|AreaShape_Perimeter,FilteredNuclei|AreaShape_FormFactor,FilteredNuclei|AreaShape_MaxFeretDiameter,FilteredNuclei|AreaShape_Solidity,FilteredNuclei|AreaShape_Orientation,FilteredNuclei|AreaShape_Center_Y,FilteredNuclei|AreaShape_Center_X,FilteredNuclei|AreaShape_Center_Z,FilteredNuclei|AreaShape_MajorAxisLength,FilteredNuclei|AreaShape_MinFeretDiameter,FilteredNuclei|AreaShape_Area,FilteredNuclei|AreaShape_Zernike_1_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MGL_Exp1
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:MSCDisplayImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:MGLoutline
    Number of digits:4
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Kanupriya\\Cell
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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