CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"SizeT": "integer", "Plate": "text", "C": "integer", "ChannelName": "text", "Z": "integer", "Well": "text", "Series": "integer", "Frame": "integer", "SizeX": "integer", "Site": "text", "SizeZ": "integer", "SizeY": "text", "FileLocation": "text", "T": "text", "SizeC": "text", "ColorFormat": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):100,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.05
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['Use filtering to enhance the foci speckles in the image. The feature size setting should be specified to be at least as large as the largest feature to be enhanced.']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
    Select the input image:OrigGreen
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:25
    Feature type:Speckles
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    Speed and accuracy:Slow

MaskImage:[module_num:7|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
    Select the input image:EnhancedGreen
    Name the output image:MaskGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:MaskGreen
    Name the primary objects to be identified:Aggregates
    Typical diameter of objects, in pixel units (Min,Max):4,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3
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
MeasureObjectIntensity:[module_num:9|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notes:['Measure the intensity of the foci against the h2ax image.']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
    Hidden:1
    Select an image to measure:EnhancedGreen
    Select objects to measure:Aggregates
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Aggregates
    Calculate the Zernike features?:No

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:Aggregates
    Measurement to display:AreaShape_Solidity
    Select the image on which to display the measurements:MaskGreen
    Text color:#FC9D7B
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
RelateObjects:[module_num:12|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notes:['Establish a parent-child between the foci (“children”) and the nuclei (“parents”) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:Nuclei
    Child objects:Aggregates
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
ExportToSpreadsheet:[module_num:13|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|University/HilbertLab/Ser5PhosAggregates/Approach2-FIJI+CP/OutputCP
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Aggregates|Parent_Nuclei,Aggregates|Number_Object_Number,Aggregates|Intensity_MeanIntensity_EnhancedGreen,Aggregates|AreaShape_Solidity,Aggregates|AreaShape_EulerNumber,Aggregates|AreaShape_Eccentricity,Aggregates|AreaShape_Area,Nuclei|Number_Object_Number,Nuclei|Intensity_StdIntensity_EnhancedGreen,Nuclei|Intensity_MeanIntensity_EnhancedGreen,Nuclei|Intensity_MaxIntensity_EnhancedGreen,Nuclei|Children_Aggregates_Count,Nuclei|Mean_Aggregates_AreaShape_Perimeter,Nuclei|Mean_Aggregates_AreaShape_FormFactor,Nuclei|Mean_Aggregates_AreaShape_MaxFeretDiameter,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Aggregates
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

DisplayScatterPlot:[module_num:14|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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Aggregates
    Select the measurement to plot on the X-axis:AreaShape_Solidity
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:Aggregates
    Select the measurement to plot on the Y-axis:AreaShape_Eccentricity
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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