CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<PigletID>.*)_(?P<Region>.*)_ (?P<Site>[0-9])_(?P<Date>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "new")
    Name to assign these images:NeuN
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "Mask")
    Name to assign these images:mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MaskImage:[module_num:5|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
    Select the input image:mask
    Name the output image:MaskNeuN
    Use objects or an image as a mask?:Image
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    Select image for mask:mask
    Invert the mask?:No

UnmixColors:[module_num:6|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
    Stain count:1
    Select the input color image:NeuN
    Name the output image:NeuN1
    Stain:DAB
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:NeuN1
    Name the primary objects to be identified:Neurons
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:30
    Suppress local maxima that are closer than this minimum allowed distance:50
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MaskObjects:[module_num:8|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
    Select objects to be masked:Neurons
    Name the masked objects:MaskedNeurons
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:mask
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Neurons
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,Image|Count_Neurons,Image|Width_PigNeuN,Image|ExecutionTime_01Images,Image|ExecutionTime_04Groups,Image|ExecutionTime_08MeasureObjectSizeShape,Image|ExecutionTime_02Metadata,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_06IdentifyPrimaryObjects,Image|ExecutionTime_05UnmixColors,Image|ExecutionTime_07IdentifyObjectsManually,Image|Series_PigNeuN,Image|Frame_PigNeuN,Image|URL_PigNeuN,Image|FileName_PigNeuN,Image|Scaling_PigNeuN,Image|ModuleError_01Images,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:NeuN
    Select method for constructing file names:From image filename
    Select image name for file prefix:PigNeuN
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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