CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Orig
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:No
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    Convert blue to gray?:No
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Inverted
    Image or measurement?:Image
    Select the first image:OrigRed
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Inverted
    Name the primary objects to be identified:NotTissue
    Typical diameter of objects, in pixel units (Min,Max):1000,10000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.9
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
MaskImage:[module_num:8|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
    Select the input image:OrigRed
    Name the output image:Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:NotTissue
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    Invert the mask?:Yes

MedianFilter:[module_num:9|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
    Select the input image:Masked
    Name the output image:MedianFilter
    Window:3

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:MedianFilter
    Name the primary objects to be identified:Oocytes
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:40
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    Thresholding method:Otsu

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Orig
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#21FE10
    Select objects to display:Oocytes
