CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "A")
    Name to assign these images:A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "B")
    Name to assign these images:B
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C")
    Name to assign these images:C
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:A
    Name the primary objects to be identified:Aobj
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:B
    Name the primary objects to be identified:Bobj
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:C
    Name the primary objects to be identified:Cobj
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
RelateObjects:[module_num:8|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
    Parent objects:Aobj
    Child objects:Bobj
    Name the output object:ABobj
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:9|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
    Parent objects:ABobj
    Child objects:Cobj
    Name the output object:ABCobj
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Bobj|Number_Object_Number,Bobj|Location_Center_Y,Bobj|Location_Center_X,Bobj|Location_Center_Z,Bobj|Parent_Aobj,Image|Count_Aobj,Image|Count_Bobj,Image|Count_Cobj,Aobj|Number_Object_Number,Aobj|Location_Center_Y,Aobj|Location_Center_X,Aobj|Location_Center_Z,Aobj|Children_Bobj_Count,ABobj|Children_Cobj_Count,Cobj|Number_Object_Number,Cobj|Location_Center_Y,Cobj|Location_Center_X,Cobj|Location_Center_Z,Cobj|Parent_ABobj
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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