CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageIntensity:[module_num:5|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
    Select the image to measure:DNA
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:6|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNA_background_substract
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:0.1
    Measurement:Intensity_MaxIntensity_DNA

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DNA_background_substract
    Name the primary objects to be identified:DNA_Primary_Objects
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:30
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.000
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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
TrackObjects:[module_num:8|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
    Choose a tracking method:Overlap
    Select the objects to track:DNA_Primary_Objects
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    Maximum pixel distance to consider matches:30
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedNuclei
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    Filter objects by lifetime?:No
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
OverlayObjects:[module_num:9|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
    Input:DNA
    Name the output image:OverlayNuclei
    Objects:DNA_Primary_Objects
    Opacity:0.3
