CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Experiment>.*)-(?P<Channel>.*)__(?P<Zplane>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Channel
    Metadata category:Zplane

MeasureImageIntensity:[module_num:5|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
    Select the image to measure:DNA
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:6|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNA_background_substract
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:0.1
    Measurement:Intensity_MaxIntensity_DNA

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DNA_background_substract
    Name the primary objects to be identified:DNA_Primary_Objects
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:30
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.000
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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
RelateObjects:[module_num:8|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
    Parent objects:DNA_Primary_Objects
    Child objects:DNA_Primary_Objects
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
TrackObjects:[module_num:9|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enabled:False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
    Choose a tracking method:Follow Neighbors
    Select the objects to track:DNA_Primary_Objects
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    Maximum pixel distance to consider matches:100
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedNuclei
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    Filter objects by lifetime?:No
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    Average cell diameter in pixels:35.0
    Use advanced configuration parameters:No
    Cost of cell to empty matching:15.0
    Weight of area difference in function matching cost:25.0

OverlayObjects:[module_num:10|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
    Input:DNA
    Name the output image:OverlayNuclei
    Objects:RelateObjects
    Opacity:0.3

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:RelateObjects

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:RelateObjects
    Calculate the Zernike features?:Yes

MeasureImageIntensity:[module_num:13|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
    Select the image to measure:DNA
    Measure the intensity only from areas enclosed by objects?:No
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:DNA_Primary_Objects|Location_Center_Y,DNA_Primary_Objects|Location_Center_X,DNA_Primary_Objects|Location_Center_Z,DNA_Primary_Objects|Number_Object_Number,DNA_Primary_Objects|Parent_DNA_Primary_Objects,DNA_Primary_Objects|Children_DNA_Primary_Objects_Count,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,Experiment|Modification_Timestamp,Experiment|Metadata_GroupingTags,RelateObjects|Location_MaxIntensity_Y_DNA,RelateObjects|Location_MaxIntensity_X_DNA,RelateObjects|Location_MaxIntensity_Z_DNA,RelateObjects|Location_CenterMassIntensity_Y_DNA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:OverlayNuclei
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:tracks_nuclei\g<Experiment>\g<Channel>
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|lakshmi_work/Fujifilm/CellProfiler_forum/tracks1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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