CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ClassI>.*)_(?P<Date>.*)_pG4_(?P<Expt>.*) - R(?P<Row>.*)-C(?P<Column>.*)-F(?P<Field>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:GLUT4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:Nuclei_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:GLUT4
    Name the primary objects to be identified:GLUT4_PN
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Nuclei_RescaleIntensity
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:7
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.5
    Threshold correction factor:3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:40
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    Thresholding method:Otsu

RelateObjects:[module_num:8|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
    Parent objects:Nuclei
    Child objects:GLUT4_PN
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:GLUT4_With_Nuclei
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
MeasureObjectIntensity:[module_num:9|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enabled:False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
    Hidden:2
    Select an image to measure:GLUT4
    Select an image to measure:DNA
    Select objects to measure:GLUT4_With_Nuclei
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:10|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enabled:False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
    Select objects to measure:GLUT4_With_Nuclei
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:GLUT4_With_Nuclei
    Name the output image:GLUT4_Mask
    Select the color format:uint16
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:GLUT4_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:GLUT4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MASK
    Saved file format:tiff
    Output file location:Default Output Folder|Masks_\g<Expt>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|D:\\pHluorin_Static_Timecourses\\Processed\\xdtest_p2\\masks1

ExportToDatabase:[module_num:13|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:pHluorinTesting.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:pHluorinTesting
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:ClassTest
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
OverlayObjects:[module_num:14|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enabled:False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
    Input:None
    Name the output image:OverlayObjects
    Objects:GLUT4_With_Nuclei
    Opacity:1

IdentifySecondaryObjects:[module_num:15|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enabled:False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
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
DisplayHistogram:[module_num:16|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enabled:False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
    Select the object whose measurements will be displayed:GLUT4_PN
    Select the object measurement to plot:Intensity_MeanIntensity_GLUT4
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Nuclear Area
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayScatterPlot:[module_num:17|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enabled:False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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Nuclei
    Select the measurement to plot on the X-axis:Intensity_MeanIntensity_DNA
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:GLUT4_PN
    Select the measurement to plot on the Y-axis:Intensity_MeanIntensity_GLUT4
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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
DisplayDensityPlot:[module_num:18|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enabled:False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
    Select the object to display on the X-axis:GLUT4_PN
    Select the object measurement to plot on the X-axis:Intensity_MeanIntensity_GLUT4
    Select the object to display on the Y-axis:Nuclei
    Select the object measurement to plot on the Y-axis:Intensity_MeanIntensity_DNA
    Select the grid size:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    How should the colorbar be scaled?:linear
    Select the color map:jet
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
FilterObjects:[module_num:19|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enabled:False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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:200
    Select the measurement to filter by:Intensity_MeanIntensity_DNA
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.15
