CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig_vials
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:invert_vials
    Image or measurement?:Image
    Select the first image:orig_vials
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ColorToGray:[module_num:6|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
    Select the input image:invert_vials
    Conversion method:Combine
    Image type:RGB
    Name the output image:gray_vial
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:0
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:gray_vial
    Name the primary objects to be identified:fly
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:50
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
ApplyThreshold:[module_num:8|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
    Select the input image:gray_vial
    Name the output image:thresh_vial
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.5,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:fly
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:10|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
    Name the output objects:FilteredBlue
    Select the object to filter:fly
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.95

TrackObjects:[module_num:11|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
    Choose a tracking method:Distance
    Select the objects to track:FilteredBlue
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    Maximum pixel distance to consider matches:2001
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:No
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
SaveImages:[module_num:12|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:thresh_vial
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    Select method for constructing file names:From image filename
    Select image name for file prefix:orig_vials
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Test
    Saved file format:jpg
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:FilteredBlue|TrackObjects_TrajectoryY_2001,FilteredBlue|Number_Object_Number,FilteredBlue|Location_Center_Y,FilteredBlue|Location_Center_X
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:Yes
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