CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does contain "nd2") (file does contain "roi.tif")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:[\\\\\\\\/](?P<Date>[0-9]{6}).*(?P<Well>[0-9]{1})
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:^(?P<folder_location>.*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'f2_380': u'folder_location', u'ROI': u'folder_location', u'f2_340': u'folder_location'}, {u'f2_380': u'Date', u'ROI': u'Date', u'f2_340': u'Date'}, {u'f2_380': u'Well', u'ROI': u'Well', u'f2_340': u'Well'}, {u'f2_380': u'T', u'ROI': None, u'f2_340': u'T'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (metadata does ChannelName "340") (image does isstackframe)
    Name to assign these images:f2_340
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "380") (image does isstackframe)
    Name to assign these images:f2_380
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "roi")
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    Name to assign these objects:ROI
    Select the image type:Objects
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    Retain outlines of loaded objects?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:folder_location

MeasureObjectIntensity:[module_num:5|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
    Hidden:2
    Select an image to measure:f2_340
    Select an image to measure:f2_380
    Select objects to measure:ROI

ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<folder_location>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :ROI|Location_MaxIntensity_Y_f2_380,ROI|Location_MaxIntensity_Y_f2_340,ROI|Location_MaxIntensity_X_f2_380,ROI|Location_MaxIntensity_X_f2_340,ROI|Location_CenterMassIntensity_Y_f2_380,ROI|Location_CenterMassIntensity_Y_f2_340,ROI|Location_CenterMassIntensity_X_f2_380,ROI|Location_CenterMassIntensity_X_f2_340,ROI|Location_Center_Y,ROI|Location_Center_X,ROI|Intensity_MeanIntensity_f2_380,ROI|Intensity_MeanIntensity_f2_340,ROI|Intensity_MeanIntensityEdge_f2_380,ROI|Intensity_MeanIntensityEdge_f2_340,ROI|Number_Object_Number,Image|Count_ROI,Image|Frame_f2_380,Image|Frame_f2_340
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:video_data
    Overwrite existing files without warning?:Yes
    Data to export:ROI
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
