CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:40
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Channel>C[0-9]{1})-(?P<File>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:green
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:red
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:cyon
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C4")
    Name to assign these images:blue
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:cyon
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:OrigCyon
    Convert blue to gray?:No
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
ColorToGray:[module_num:6|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
    Select the input image:blue
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ColorToGray:[module_num:7|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
    Select the input image:green
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:No
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
ColorToGray:[module_num:8|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
    Select the input image:red
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:No
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    Convert blue to gray?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:OrigGreen
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Background
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    Block size:4
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:OrigGreen
    Name the output image:CleanGreen
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Subtract

ReduceNoise:[module_num:11|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
    Select the input image:CleanGreen
    Name the output image:ReduceNoiseGreen
    Size:7
    Distance:11
    Cut-off distance:0.1

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:IdentifyPrimaryObjectsBlue
    Typical diameter of objects, in pixel units (Min,Max):30,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:IdentifyPrimaryObjectsBlue
    Calculate the Zernike features?:No

FilterObjects:[module_num:14|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
    Select the objects to filter:IdentifyPrimaryObjectsBlue
    Name the output objects:FilterObjectsBlue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:40
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:15|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
    Hidden:1
    Select an image to measure:OrigBlue
    Select objects to measure:FilterObjectsBlue

DefineGrid:[module_num:16|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
    Name the grid:GridBlue
    Number of rows:22
    Number of columns:33
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Once
    Select the method to define the grid:Automatic
    Select the previously identified objects:FilterObjectsBlue
    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:Yes
    Name the output image:GridBlue
    Select the image on which to display the grid:OrigBlue
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:17|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
    Select the defined grid:GridBlue
    Name the objects to be identified:WellsBlue
    Select object shapes and locations:Natural Shape and Location
    Specify the circle diameter automatically?:Manual
    Circle diameter:20
    Select the guiding objects:FilterObjectsBlue

MeasureObjectIntensity:[module_num:18|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
    Hidden:1
    Select an image to measure:OrigBlue
    Select objects to measure:WellsBlue

IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:OrigRed
    Name the primary objects to be identified:IdentifyPrimaryObjectsRed
    Typical diameter of objects, in pixel units (Min,Max):2,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:IdentifyPrimaryObjectsRed
    Calculate the Zernike features?:No

FilterObjects:[module_num:21|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
    Select the objects to filter:IdentifyPrimaryObjectsRed
    Name the output objects:FilterObjectsRed
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:10.0
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:22|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
    Hidden:1
    Select an image to measure:OrigRed
    Select objects to measure:FilterObjectsRed

DefineGrid:[module_num:23|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
    Name the grid:GridRed
    Number of rows:22
    Number of columns:33
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Once
    Select the method to define the grid:Automatic
    Select the previously identified objects:FilterObjectsRed
    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:Yes
    Name the output image:GridRed
    Select the image on which to display the grid:OrigRed
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:24|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
    Select the defined grid:GridRed
    Name the objects to be identified:WellsRed
    Select object shapes and locations:Natural Shape and Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
    Select the guiding objects:FilterObjectsRed

MeasureObjectIntensity:[module_num:25|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
    Hidden:1
    Select an image to measure:OrigRed
    Select objects to measure:WellsRed

IdentifyPrimaryObjects:[module_num:26|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
    Select the input image:ReduceNoiseGreen
    Name the primary objects to be identified:IdentifyPrimaryObjectsGreen
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:27|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
    Select objects to measure:IdentifyPrimaryObjectsGreen
    Calculate the Zernike features?:No

FilterObjects:[module_num:28|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
    Select the objects to filter:IdentifyPrimaryObjectsGreen
    Name the output objects:FilterObjectsGreen
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:50.0
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:29|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
    Hidden:1
    Select an image to measure:ReduceNoiseGreen
    Select objects to measure:FilterObjectsGreen

DefineGrid:[module_num:30|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
    Name the grid:GridGreen
    Number of rows:22
    Number of columns:33
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
    Select the previously identified objects:FilterObjectsGreen
    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Select the image on which to display the grid:ReduceNoiseGreen
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:31|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
    Select the defined grid:GridGreen
    Name the objects to be identified:WellsGreen
    Select object shapes and locations:Natural Shape and Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
    Select the guiding objects:FilterObjectsGreen

MeasureObjectIntensity:[module_num:32|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
    Hidden:1
    Select an image to measure:ReduceNoiseGreen
    Select objects to measure:WellsGreen

IdentifyPrimaryObjects:[module_num:33|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
    Select the input image:OrigCyon
    Name the primary objects to be identified:IdentifyPrimaryObjectsCyon
    Typical diameter of objects, in pixel units (Min,Max):2,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:34|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
    Select objects to measure:IdentifyPrimaryObjectsCyon
    Calculate the Zernike features?:No

FilterObjects:[module_num:35|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
    Select the objects to filter:IdentifyPrimaryObjectsCyon
    Name the output objects:FilterObjectsCyon
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:10.0
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:36|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
    Hidden:1
    Select an image to measure:OrigCyon
    Select objects to measure:FilterObjectsCyon

DefineGrid:[module_num:37|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
    Name the grid:GridCyon
    Number of rows:22
    Number of columns:33
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Once
    Select the method to define the grid:Automatic
    Select the previously identified objects:FilterObjectsCyon
    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:Yes
    Name the output image:GridCyon
    Select the image on which to display the grid:OrigCyon
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:38|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
    Select the defined grid:GridCyon
    Name the objects to be identified:WellsCyon
    Select object shapes and locations:Natural Shape and Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
    Select the guiding objects:FilterObjectsCyon

MeasureObjectIntensity:[module_num:39|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
    Hidden:1
    Select an image to measure:OrigCyon
    Select objects to measure:WellsCyon

ExportToSpreadsheet:[module_num:40|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|lakshmi_work/Fujifilm/CellProfiler_forum
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:WellsBlue|Intensity_MassDisplacement_OrigBlue,WellsBlue|Intensity_MinIntensity_OrigBlue,WellsBlue|Intensity_StdIntensity_OrigBlue,WellsBlue|Intensity_IntegratedIntensityEdge_OrigBlue,WellsBlue|Intensity_UpperQuartileIntensity_OrigBlue,WellsBlue|Intensity_LowerQuartileIntensity_OrigBlue,WellsBlue|Intensity_MinIntensityEdge_OrigBlue,WellsBlue|Intensity_MADIntensity_OrigBlue,WellsBlue|Intensity_MeanIntensity_OrigBlue,WellsBlue|Intensity_IntegratedIntensity_OrigBlue,WellsBlue|Intensity_MeanIntensityEdge_OrigBlue,WellsBlue|Intensity_MaxIntensity_OrigBlue,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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