CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "mdb") (file doesnot contain "spooled") (file doesnot contain "o1") (file doesnot contain "o2") (file doesnot contain "log")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Instrument>.*)_(?P<Plate>.*)_(?P<Well>[A-Za-z][0-9]{1,2})f(?P<Site>[0-9]{1,2})d(?P<ChannelNumber>[0-2])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:OrigHoechst
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:OrigHoechst
    Name the output image:RescaleIntensity
    Rescaling method:Divide each image by the same value
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    Divisor value:2
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the nuclear stain image. Typical settings to change:', 'Diameter of objects', 'Thresholding method (Otsu Global)', 'Threshold correction factor', 'Declumping ("Shape" and "Intensity")', 'Maybe also: Smoothing filter size and maxima supression distance']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
    Select the input image:OrigHoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:30
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    Thresholding method:Otsu

RescaleIntensity:[module_num:7|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
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
ExportToSpreadsheet:[module_num:8|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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