CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "9cb")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:70
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.09,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskImage:[module_num:6|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
    Select the input image:DNA
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjects
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    Invert the mask?:Yes

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:DNA
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:IdentifyPrimaryObjects1
    Typical diameter of objects, in pixel units (Min,Max):6,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:70
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.08,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskObjects:[module_num:9|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
    Select objects to be masked:IdentifyPrimaryObjects1
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifyPrimaryObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#4CF239
    Select objects to display:MaskedNuclei
