CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "p62")
    Name to assign these images:p62
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:p62
    Name the primary objects to be identified:p62
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Nuclei
    Name the primary objects to be identified:DAPI
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Nuclei
    Name the output image:DAPIoutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:DAPI

MaskObjects:[module_num:8|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
    Select objects to be masked:DAPI
    Name the masked objects:p62MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:p62
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:p62MaskedNuclei
    Name the output image:p62MaskedNucleiIMAGE
    Select the color format:Binary (black & white)
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:p62MaskedNucleiIMAGE
    Name the primary objects to be identified:Primaryobjectsp62Nuclei
    Typical diameter of objects, in pixel units (Min,Max):1,50
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Nuclei
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:p62MaskedNuclei

RelateObjects:[module_num:12|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enabled:False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
    Parent objects:DAPI
    Child objects:p62
    Name the output object:p62PosDAPI
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MeasureImageAreaOccupied:[module_num:13|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:p62
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
CalculateMath:[module_num:14|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notes:['Calculate the % of p62 colocalized in neuronal dendrites marked by MAP2, over the total area of dendrites visualised. ']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
    Name the output measurement:Normp62
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_p62
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:DAPI
    Select the denominator measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:15|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
    Name the output measurement:PercColoc
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_Primaryobjectsp62Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:DAPI
    Select the denominator measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/Slide.Scanner.analysis/p62.DAPI
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:O1_
    Overwrite existing files without warning?:No
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