CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:5
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "001")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):200,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.65,0.95
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