CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:51
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '\\\\']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Serie_name>.*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<folder>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:29
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ilastik")
    Name to assign these images:proba
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ONE") (file does contain "_nx_Aligned.tif")
    Name to assign these images:ONE_nx
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ONE") (file does contain "_AEC_Aligned.tif")
    Name to assign these images:ONE_AEC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TWO") (file does contain "_nx_Aligned.tif")
    Name to assign these images:TWO_nx
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TWO") (file does contain "_AEC_Aligned.tif")
    Name to assign these images:TWO_AEC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "THREE") (file does contain "_nx_Aligned.tif")
    Name to assign these images:THREE_nx
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "THREE") (file does contain "_AEC_Aligned.tif")
    Name to assign these images:THREE_AEC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FOUR") (file does contain "_nx_Aligned.tif")
    Name to assign these images:FOUR_nx
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FOUR") (file does contain "_AEC_Aligned.tif")
    Name to assign these images:FOUR_AEC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FIVE") (file does contain "_nx_Aligned.tif")
    Name to assign these images:FIVE_nx
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FIVE") (file does contain "_AEC_Aligned.tif")
    Name to assign these images:FIVE_AEC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SIX") (file does contain "_nx_Aligned.tif")
    Name to assign these images:SIX_nx
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SIX") (file does contain "_AEC_Aligned.tif")
    Name to assign these images:SIX_AEC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SEVEN") (file does contain "_nx_Aligned.tif")
    Name to assign these images:SEVEN_nx
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SEVEN") (file does contain "_AEC_Aligned.tif")
    Name to assign these images:SEVEN_AEC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "EIGHT") (file does contain "_nx_Aligned.tif")
    Name to assign these images:EIGHT_nx
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "EIGHT") (file does contain "_AEC_Aligned.tif")
    Name to assign these images:EIGHT_AEC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "NINE") (file does contain "_nx_Aligned.tif")
    Name to assign these images:NINE_nx
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "NINE") (file does contain "_AEC_Aligned.tif")
    Name to assign these images:NINE_AEC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "NUCLEI") (file does contain "_nx_Aligned.tif")
    Name to assign these images:NXRAW
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ONE") (file doesnot contain "_nx_Aligned.tif") (file doesnot contain "_AEC_Aligned.tif")
    Name to assign these images:ONE_HE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TWO") (file doesnot contain "_nx_Aligned.tif") (file doesnot contain "_AEC_Aligned.tif")
    Name to assign these images:TWO_HE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "THREE") (file doesnot contain "_nx_Aligned.tif") (file doesnot contain "_AEC_Aligned.tif")
    Name to assign these images:THREE_HE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FOUR") (file doesnot contain "_nx_Aligned.tif") (file doesnot contain "_AEC_Aligned.tif")
    Name to assign these images:FOUR_HE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FIVE") (file doesnot contain "_nx_Aligned.tif") (file doesnot contain "_AEC_Aligned.tif")
    Name to assign these images:FIVE_HE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SIX") (file doesnot contain "_nx_Aligned.tif") (file doesnot contain "_AEC_Aligned.tif")
    Name to assign these images:SIX_HE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SEVEN") (file doesnot contain "_nx_Aligned.tif") (file doesnot contain "_AEC_Aligned.tif")
    Name to assign these images:SEVEN_HE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "EIGHT") (file doesnot contain "_nx_Aligned.tif") (file doesnot contain "_AEC_Aligned.tif")
    Name to assign these images:EIGHT_HE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "NINE") (file doesnot contain "_nx_Aligned.tif") (file doesnot contain "_AEC_Aligned.tif")
    Name to assign these images:NINE_HE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Serie_name

RescaleIntensity:[module_num:5|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
    Select the input image:ONE_AEC
    Name the output image:ONERI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:TWO_AEC
    Name the output image:TWORI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:THREE_AEC
    Name the output image:THREERI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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
    Select the input image:FOUR_AEC
    Name the output image:FOURRI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:FIVE_AEC
    Name the output image:FIVERI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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
    Select the input image:SIX_AEC
    Name the output image:SIXRI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:11|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
    Select the input image:SEVEN_AEC
    Name the output image:SEVENRI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:12|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
    Select the input image:EIGHT_AEC
    Name the output image:EIGHTRI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:13|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
    Select the input image:NINE_AEC
    Name the output image:NINERI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:14|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
    Select the input image:NXRAW
    Name the output image:nxrawRI
    Rescaling method:Stretch each image to use the full intensity range
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
ColorToGray:[module_num:15|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
    Select the input image:proba
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:probafond
    Convert green to gray?:Yes
    Name the output image:probanx
    Convert blue to gray?:Yes
    Name the output image:probainternx
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:probanx
    Name the primary objects to be identified:nxobj
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:18
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:2
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    Manual threshold:0.5
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
ExpandOrShrinkObjects:[module_num:17|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
    Select the input objects:nxobj
    Name the output objects:cellobj
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:8
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
IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:ONE_AEC
    Name the primary objects to be identified:objepith
    Typical diameter of objects, in pixel units (Min,Max):30,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
ExpandOrShrinkObjects:[module_num:19|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
    Select the input objects:objepith
    Name the output objects:objepithexpand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:nxrawRI
    Name the output image:nxetcell
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:nxobj
    Select outline color:Green
    Select objects to display:cellobj

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:nxetcell
    Select method for constructing file names:Single name
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    Enter single file name:nucleus_and_cells_save2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
IdentifyTertiaryObjects:[module_num:22|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
    Select the larger identified objects:objepithexpand
    Select the smaller identified objects:objepith
    Name the tertiary objects to be identified:periepithelium
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:23|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
    Hidden:9
    Select an image to measure:ONERI
    Select an image to measure:TWORI
    Select an image to measure:THREERI
    Select an image to measure:FOURRI
    Select an image to measure:FIVERI
    Select an image to measure:SIXRI
    Select an image to measure:SEVENRI
    Select an image to measure:EIGHTRI
    Select an image to measure:NINERI
    Select objects to measure:cellobj

MaskObjects:[module_num:24|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
    Select objects to be masked:cellobj
    Name the masked objects:cellobjdansepith
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:objepith
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:nxrawRI
    Name the output image:cells_in_epithelium
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:cellobjdansepith
    Select outline color:Green
    Select objects to display:objepith

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:cells_in_epithelium
    Select method for constructing file names:Single name
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    Enter single file name:segcell_dans_epith
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:27|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
    Hidden:9
    Select an image to measure:ONERI
    Select an image to measure:TWORI
    Select an image to measure:THREERI
    Select an image to measure:FOURRI
    Select an image to measure:FIVERI
    Select an image to measure:SIXRI
    Select an image to measure:SEVENRI
    Select an image to measure:EIGHTRI
    Select an image to measure:NINERI
    Select objects to measure:cellobjdansepith

MaskObjects:[module_num:28|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
    Select objects to be masked:cellobj
    Name the masked objects:cellobperiepith
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:periepithelium
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:nxrawRI
    Name the output image:segcellperiepith
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:cellobperiepith
    Select outline color:Green
    Select objects to display:objepith

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:segcellperiepith
    Select method for constructing file names:Single name
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    Enter single file name:segcell_peri_epith
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:31|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
    Hidden:9
    Select an image to measure:ONERI
    Select an image to measure:TWORI
    Select an image to measure:THREERI
    Select an image to measure:FOURRI
    Select an image to measure:FIVERI
    Select an image to measure:SIXRI
    Select an image to measure:SEVENRI
    Select an image to measure:EIGHTRI
    Select an image to measure:NINERI
    Select objects to measure:cellobperiepith

ExportToSpreadsheet:[module_num:32|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|\g<folder>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_cellobjdansepith,Image|Count_cellobperiepith,Image|Count_nxobj,Image|Count_cellobj,Image|PathName_NXRAW,Image|PathName_proba,cellobjdansepith|Intensity_StdIntensity_TWORI,cellobjdansepith|Intensity_StdIntensity_FOURRI,cellobjdansepith|Intensity_StdIntensity_FIVERI,cellobjdansepith|Intensity_StdIntensity_EIGHTRI,cellobjdansepith|Intensity_StdIntensity_ONERI,cellobjdansepith|Intensity_StdIntensity_THREERI,cellobjdansepith|Intensity_StdIntensity_SIXRI,cellobjdansepith|Intensity_StdIntensity_NINERI,cellobjdansepith|Intensity_StdIntensity_SEVENRI,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:resultats
    Overwrite existing files without warning?:No
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
DisplayDataOnImage:[module_num:33|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
    Display object or image measurements?:Object
    Select the input objects:cellobj
    Measurement to display:Intensity_IntegratedIntensity_ONERI
    Select the image on which to display the measurements:ONE_HE
    Text color:red
    Name the output image that has the measurements displayed:resultONE
    Font size (points):8
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:resultONE
    Select method for constructing file names:Single name
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    Enter single file name:result_ONE
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:35|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
    Display object or image measurements?:Object
    Select the input objects:cellobj
    Measurement to display:Intensity_IntegratedIntensity_TWORI
    Select the image on which to display the measurements:TWO_HE
    Text color:red
    Name the output image that has the measurements displayed:resultTWO
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:resultTWO
    Select method for constructing file names:Single name
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    Enter single file name:result_TWO
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:37|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
    Display object or image measurements?:Object
    Select the input objects:cellobj
    Measurement to display:Intensity_IntegratedIntensity_THREERI
    Select the image on which to display the measurements:THREE_HE
    Text color:red
    Name the output image that has the measurements displayed:resultTHREE
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:resultTHREE
    Select method for constructing file names:Single name
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    Enter single file name:result_THREE
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:39|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
    Display object or image measurements?:Object
    Select the input objects:cellobj
    Measurement to display:Intensity_IntegratedIntensity_FOURRI
    Select the image on which to display the measurements:FOUR_HE
    Text color:red
    Name the output image that has the measurements displayed:resultFOUR
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:resultFOUR
    Select method for constructing file names:Single name
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    Enter single file name:result_FOUR
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:41|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
    Display object or image measurements?:Object
    Select the input objects:cellobj
    Measurement to display:Intensity_IntegratedIntensity_FIVERI
    Select the image on which to display the measurements:FIVE_HE
    Text color:red
    Name the output image that has the measurements displayed:resultFIVE
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:resultFIVE
    Select method for constructing file names:Single name
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    Enter single file name:result_FIVE
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:43|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
    Display object or image measurements?:Object
    Select the input objects:cellobj
    Measurement to display:Intensity_IntegratedIntensity_SIXRI
    Select the image on which to display the measurements:SIX_HE
    Text color:red
    Name the output image that has the measurements displayed:resultSIX
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:resultSIX
    Select method for constructing file names:Single name
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    Enter single file name:result_SIX
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:45|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
    Display object or image measurements?:Object
    Select the input objects:cellobj
    Measurement to display:Intensity_IntegratedIntensity_SEVENRI
    Select the image on which to display the measurements:SEVEN_HE
    Text color:red
    Name the output image that has the measurements displayed:resultSEVEN
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:46|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
    Select the type of image to save:Image
    Select the image to save:resultSEVEN
    Select method for constructing file names:Single name
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    Enter single file name:result_SEVEN
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:47|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
    Display object or image measurements?:Object
    Select the input objects:cellobj
    Measurement to display:Intensity_IntegratedIntensity_EIGHTRI
    Select the image on which to display the measurements:EIGHT_HE
    Text color:red
    Name the output image that has the measurements displayed:resultEIGHT
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:48|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
    Select the type of image to save:Image
    Select the image to save:resultEIGHT
    Select method for constructing file names:Single name
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    Enter single file name:result_EIGHT
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:49|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
    Display object or image measurements?:Object
    Select the input objects:cellobj
    Measurement to display:Intensity_IntegratedIntensity_NINERI
    Select the image on which to display the measurements:NINE_HE
    Text color:red
    Name the output image that has the measurements displayed:resultNINE
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:resultNINE
    Select method for constructing file names:Single name
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    Enter single file name:result_NINE
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<folder>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:51|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:Yes
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    Local root path:C:\test_FIJI_macro\arrivee_petit\FIJI_results_testCP
    Cluster root path:C:\test_FIJI_macro\arrivee_petit\FIJI_results_testCP
