CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\(fld (?P<Site>[0-9]*) wv (?P<Wavelength>.*) - (?P<Filter>.*)\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "wv 405")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "wv 488")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "wv 561")
    Name to assign these images:orange
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:Blue
    Name the output image:Filteredblue
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Filteredblue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.06,0.5
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Smooth:[module_num:7|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
    Select the input image:Green
    Name the output image:Filtered_green
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Filtered_green
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.5
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.08,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:orange
    Name the output image:Enhancedorange
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Enhancedorange
    Name the primary objects to be identified:autophagosomes_red
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:7
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.8
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.008,1.0
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    Two-class or three-class thresholding?:Two classes
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
EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:Green
    Name the output image:Enhancedgreen
    Select the operation:Enhance
    Feature size:7
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:Enhancedgreen
    Name the primary objects to be identified:autophagosomes_green
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
    Suppress local maxima that are closer than this minimum allowed distance:40
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.008,1.0
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    Two-class or three-class thresholding?:Two classes
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
RelateObjects:[module_num:13|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
    Parent objects:autophagosomes_green
    Child objects:autophagosomes_red
    Name the output object:yellow
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None

RelateObjects:[module_num:14|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
    Parent objects:Cells
    Child objects:yellow
    Name the output object:cells_yellow
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None
    Parent name:None

RelateObjects:[module_num:15|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
    Parent objects:Cells
    Child objects:autophagosomes_red
    Name the output object:cells_red
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:16|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
    Parent objects:Cells
    Child objects:autophagosomes_green
    Name the output object:cells_green
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
MeasureColocalization:[module_num:17|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
    Hidden:2
    Hidden:1
    Select an image to measure:Enhancedgreen
    Select an image to measure:Enhancedorange
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Cells
    Run all metrics?:Yes
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:Yes
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    Name the output image:outlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#E6E6FA
    Select objects to display:Cells
    Select outline color:#07E407
    Select objects to display:autophagosomes_green
    Select outline color:#F1282A
    Select objects to display:autophagosomes_red
    Select outline color:blue
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:yellow

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Filtered_green
    Name the output image:outlines_image
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#E6E6FA
    Select objects to display:Cells
    Select outline color:#07E407
    Select objects to display:autophagosomes_green
    Select outline color:#F1282A
    Select objects to display:autophagosomes_red
    Select outline color:blue
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:yellow

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|lakshmi_work/RaviLab_JNCSAR/for Traffic Light Assay/output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:outlines_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:Green
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|lakshmi_work/RaviLab_JNCSAR/for Traffic Light Assay/output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:22|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
    Select objects to measure:Cells
    Select objects to measure:autophagosomes_green
    Select objects to measure:autophagosomes_red
    Select objects to measure:yellow
    Select objects to measure:cells_green
    Select objects to measure:cells_red
    Calculate the Zernike features?:No

MeasureImageIntensity:[module_num:23|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
    Select the image to measure:Filtered_green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Cells
    Select the image to measure:Filtered_green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:autophagosomes_green
    Select the image to measure:Filtered_green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:autophagosomes_red
    Select the image to measure:Filtered_green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:yellow

MeasureObjectIntensity:[module_num:24|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
    Hidden:1
    Select an image to measure:Filtered_green
    Select objects to measure:Cells
    Select objects to measure:autophagosomes_green
    Select objects to measure:autophagosomes_red
    Select objects to measure:yellow

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|E:\\Irine\\Output\\row D
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:cells_green|AreaShape_Perimeter,cells_green|AreaShape_FormFactor,cells_green|AreaShape_Solidity,cells_green|AreaShape_Center_Y,cells_green|AreaShape_Center_X,cells_green|AreaShape_Center_Z,cells_green|AreaShape_MaxFeretDiameter,cells_green|AreaShape_MinFeretDiameter,cells_green|AreaShape_MajorAxisLength,cells_green|AreaShape_EulerNumber,cells_green|AreaShape_MedianRadius,cells_green|AreaShape_Compactness,cells_green|AreaShape_Extent,cells_green|AreaShape_Orientation,cells_green|AreaShape_Eccentricity,cells_green|AreaShape_MaximumRadius,cells_green|AreaShape_MinorAxisLength,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_ D and E
    Overwrite existing files without warning?:Yes
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