CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Regular expression:(?P<Well>[a-z]{1}[0-9]{2})(?P<Muta>[a-z]{2})(?P<Plate>...tif)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:lysosomes
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:lysosomes
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:6
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
ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.5
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:FilteredImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:FilteredImage
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:lys
    Typical diameter of objects, in pixel units (Min,Max):50,500
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Background
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:3
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.08,1.0
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
MaskObjects:[module_num:8|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
    Select objects to be masked:lys
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:lys
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lysosomes
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:cyan
    Load outlines from an image or objects?:Objects
    Select objects to display:MaskedNuclei

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:lysosomes
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:overlay
    Saved file format:png
    Output file location:Elsewhere...|D:\\\\\\\\untitled folder\\\\\\\\output_tiff_lysosomal_delivery
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:lysosomes
    Select objects to measure:MaskedNuclei

MeasureImageIntensity:[module_num:12|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
    Select the image to measure:lysosomes
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:MaskedNuclei

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\\\\\\\untitled folder\\\\\\\\output_tiff_lysosomal_delivery
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :Experiment|Modification_Timestamp,Experiment|Run_Timestamp,Experiment|Pipeline_Pipeline,Experiment|CellProfiler_Version,Image|Count_MaskedNuclei,Image|Count_lys,Image|Group_Index,Image|Group_Number,Image|Width_lysosomes,Image|ExecutionTime_01Images,Image|ExecutionTime_04Groups,Image|ExecutionTime_07IdentifyPrimaryObjects,Image|ExecutionTime_08MaskObjects,Image|ExecutionTime_11MeasureObjectIntensity,Image|ExecutionTime_02Metadata,Image|ExecutionTime_12MeasureImageIntensity,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_10SaveImages,Image|ExecutionTime_05Smooth,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:lysosomes_int
    Overwrite existing files without warning?:No
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