CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate_row>[a-z][0-9]{2})(?P<Plate_column>[a-z][0-9]{2})(?P<Field>[a-z][0-9]{2})(?P<Stack>[a-z][0-9]{2})-(?P<Channel>[a-z]{2}[0-9])sk1fk1fl1.tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:MIP_chan1
    Select method for constructing file names:From image filename
    Select image name for file prefix:chan1
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|lakshmi_work/RaviLab_JNCSAR/output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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